//Redone - Bea C. 2018
//original macro by Lai Ding at Harvard

// ImageJ initialize
run("Colors...", "foreground=white background=black selection=magenta");
run("Options...", "iterations=1 count=1 black edm=Overwrite");
run("Set Measurements...", "area mean perimeter integrated area_fraction limit redirect=None decimal=5");

//set raw result folder. rawdir contains multiple subfolders, each subfolder contains multiple raw images
//each image is RGB format
//result and dendrites folders should be empty.
rawdir=getDirectory("Choose Raw Data Folder");
resultdir=getDirectory("Choose Result Folder");

//variable setup
var greenThreshold, redThreshold, blueThreshold, areapercent, scale, minsize, maxsize, name, precount, postcount, POIcount, prepostcount, postprecount, axonflag;
var onestring, twostring, threestring, resultlist, FolderCreate, foldername, postprecount, prepostcount, totalpostprecount, totalprepostcount;
var UMcountpostprepostpost, UMcountprepostprepre, str, prepostRatio, postpostRatio, ratioTemp, prepostArray, prepreArray, postpreArray, postpostArray, colors;
var pre, post, POI, UMcountprePOIpostPOIPOIPOI, POIprecount, POIpostcount, marker, second, third ;

//three thresholds - specify which channel is for "pre-", post-, and protein of interest (POI)
//restrict the ROI of the "presynaptic" marker to the puncta associated with postsynaptic puncta
//get the intensity of the presynaptic marker within the protein of interest ROI
//and compare it to the overall intensity of the protein of interest within its own ROI?
//so, if you have G/R/B, with G=pre, R=post, B=POI, R associated G puncta used to assess the intensity of B signal
//within the G ROI and the intensity of the B signal within the B ROI.

// input parameter

parameterinput();

print("Raw_Folder:	"+rawdir);
print("Result_Folder:	"+resultdir);
print("GreenThreshold	RedThreshold	BlueThreshold	AreaPercent(%)	PixelScale(um/pixel)	Min_Puncta_Size	Max_Puncta_Size");
print(greenThreshold+"	"+redThreshold+"	"+blueThreshold+"	"+areapercent+"	"+scale+"	"+minsize+"	"+maxsize);
//mod this portion to display the ratio of counted to total GR/RG puncta
print(" 	GreenPuncta#	RedPuncta#	BluePuncta#	GR#	RG#	DendriteLength(um)	Density_G(#/um)	Density_R(#/um)	Density_GR(#/um)	Density_RG(#/um)		gr_%AreaAvg(counted)	gr_%AreaAvg(total)	gr_totalCounted	rg_%AreaAvg(counted)	rg_%AreaAvg(total)	rg_totalCounted");

folderlist=getFileList(rawdir);

//setup for the intensity analysis, overlay of ROI from mask on unmasked channel image
//prepost = pre ROI/post image
//prepre = pre ROI/pre image
//postpreArray = post ROI/pre image
//postpost = post ROI/post image
//prePOI = pre ROI/POI image
//postPOI = post ROI/POI image
//POIPOI = POI ROI/POI image
//prepostPOI = pre associated post ROI/POI image
//postprePOI = post associated pre ROI/POI image

//these arrays are for two channel associations
prepostArray = newArray("");
prepreArray = newArray("");
postpreArray = newArray(""); 
postpostArray = newArray("");
POIpreArray = newArray("");
POIpostArray = newArray("");
POIPOIArray = newArray("");

//these arrays are for two channel associations dependent on a third
prePOIpostArray = newArray("");
postPOIpreArray = newArray("");

//prepostRatio = newArray("");
//postpostRatio = newArray("");

UMcountprepostprepre = " Filename	#	AreaOfPuncta		PrePost%Overlap	PrePostmeanGrey	PrePostint_density(um)	PrePostraw_int_den(pix)		PrePre%Overlap	PrePremeanGrey	PrePreint_density(um)	PrePreraw_int_den(pix)\n";
UMcountpostprepostpost = "Filename	#	AreaOfPuncta		PostPre%Overlap	PostPremeanGrey	PostPreint_density(um)	PostPreraw_int_den(pix)		PostPost%Overlap	PostPostmeanGrey	PostPostint_density(um)	PostPostraw_int_den(pix)\n";
UMcountprePOIpostPOIPOIPOI = "Filename	#	AreaOfPuncta		PrePOI%Overlap	PrePOImeanGrey	PrePOIint_density(um)	PrePOIraw_int_den(pix)		PostPOI%Overlap	PostPOImeanGrey	PostPOIint_density(um)	PostPOIraw_int_den(pix)		POIPOI%Overlap	POIPOImeanGrey	POIPOIint_density(um)	POIPOIraw_int_den(pix)\n";


//"foldercreate" is for generation of result folders - at the time of making this, it didn't allow for autoselection
//of the result folder with the code. Might be worth going back thru to see if it can be done a diff
//way that reduces the input I've gotta do

for(f=0;f<folderlist.length;f++) 
	{
	foldername = File.getName(rawdir+folderlist[f]);
	File.makeDirectory(resultdir+foldername);
	rawlist=getFileList(rawdir+foldername);
	filelist=getFileList(rawdir+folderlist[f]);
	resultpath = getFileList(rawdir+folderlist[f]);
	print(folderlist[f]);

	prepostArray = Array.concat(prepostArray,folderlist[f]+"\n");
	prepreArray = Array.concat(prepreArray,"");
	postpreArray = Array.concat(postpreArray,folderlist[f]+"\n");
	postpostArray = Array.concat(postpostArray,"");
	POIpreArray = Array.concat(POIpreArray,folderlist[f]+"\n");
	POIpostArray = Array.concat(POIpostArray,"");
	POIPOIArray = Array.concat(POIPOIArray,"");

	prePOIpostArray = Array.concat(prePOIpostArray,folderlist[f]+"\n");
	postPOIpreArray = Array.concat(postPOIpreArray,"");

	for(d=0;d<filelist.length;d++)
		{
		//initialize :  open file, split channel, name by "red"/"green"/"blue"/"axon"
		initialize();

		//create green, red, blue mask images and roi files
		mask(pre); 
		mask(post);
		mask(POI);

		//measure
		
		//the function below was moved to be actual code because arrays don't populate within a fx in javascript/imagej language
		//in imagej because it's dumb.

		//this function opens the saved ROI files for the green and red channels of each image and overlays them
		//either using the green mask as the base image and checking for overlap of the red puncta or vice versa
		//because the puncta sizes differ, this can be pretty variable between G and R
		//upon checking by hand, at 25% overlap, the one that most closely aligns is GR
		totalprepostcount = 0;
		totalpostprecount = 0;
		totalPOIprecount = 0;
		totalPOIpostcount = 0;
		prepostcount = 0;
		postprecount = 0;
		POIprecount = 0;
		POIpostcount = 0;

		//maybe have the variables set up so that it cycles through a test of all three channels three times with 
		//each different raw image? I don't want to have one condition less robust than the other two because
		//I know that this is going to be a problem for me in the future if so.

		for(r=0;r<3;r++){
			if(r==0){
				//setting up the color for the ROI
				marker = pre;
				//setting up the color for the image 
				second = post;
				//setting up variables to store colocalization count in
				markersecondcount = prepostcount;
				markerthirdcount = 0;
				totalmarkersecondcount = totalprepostcount;
				totalmarkerthirdcount = 0;
				markersecondArray = prepostArray;
				markerthirdArray = 0;
				markermarkerArray = prepreArray;
			}
			if(r==1){
				marker = post;
				second = pre;
				markersecondcount = postprecount;
				markerthirdcount = 0;
				totalmarkersecondcount = totalpostprecount;
				totalmarkerthirdcount = 0;
				markersecondArray = postpreArray;
				markerthirdArray = 0;
				markermarkerArray = postpostArray;
			}
			if(r==2){
				marker = POI;
				second = pre;
				third = post;
				markersecondcount = POIprecount;
				markerthirdcount = POIpostcount;
				totalmarkersecondcount = totalPOIprecount;
				totalmarkerthirdcount = totalPOIpostcount;
				markersecondArray = POIpreArray;
				markerthirdArray = POIpostArray;
				markermarkerArray = POIPOIArray;

				POIpreArray = Array.concat(POIpreArray,folderlist[f]+"\n");
				POIpostArray = Array.concat(POIpostArray,"");
				POIPOIArray = Array.concat(POIPOIArray,"");
				prePOIpostArray = Array.concat(prePOIpostArray,folderlist[f]+"\n");
				postPOIpreArray = Array.concat(postPOIpreArray,"");
			}

			roiManager("reset");
			if( markersecondcount > 0 ) {
	 	 		roiManager("Open", resultdir+folderlist[f]+name+"_"+marker+"_ROI.zip");
				}
			selectImage(second+" mask");
			run("Clear Results");
			roiManager("Measure");
			markersecondcount=0;
			x = 0;
			for(i=0;i<roiManager("Count");i++) {
				totalmarkersecondcount = totalmarkersecondcount + getResult("%Area",i);
				if( getResult("%Area",i) >= areapercent ) {
					markersecondcount++;
					markersecondcount = markersecondcount + getResult("%Area",i);
				}
				x++;
			}
	
			//channel-unmask is the direct image, without a mask
	
			selectImage(second+"-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				//this str just stores the values from the ROI measure function to be put into the appropriate array for the green ROI
				str = filelist[d]+"	"+i+1+"	"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i);
				prepostArray = Array.concat(prepostArray,str);
			}
			selectImage(marker+"-unmask");
			run("Clear Results");
			roiManager("Measure");
			//For the "triple coloc" have the GR, GG, RG, RR associated with the third channel - in this case 
			//roiManager("Select", 0);
			for(i=0;i<roiManager("Count");i++) {
				str = "		"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i)+"\n";
				prepreArray = Array.concat(prepreArray,str);
			}
			selectImage("blue-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				//this str just stores the values from the ROI measure function to be put into the appropriate array for the green ROI
				str =  "		"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i);
				prepostArray = Array.concat(prepostArray,str);
			}
	
			xpre = x;
			totalprepostcount = totalprepostcount/x;
			prepostcount = prepostcount/prepostcount;
	
			roiManager("reset"); 
			run("Clear Results");
			
			if( postcount > 0 ) {
	 	 		roiManager("Open", resultdir+folderlist[f]+name+"_Red_ROI.zip");
				}
			selectImage("green mask");
			run("Clear Results");
			roiManager("Measure");
			postprecount=0;
			x = 0;
			for(i=0;i<roiManager("Count");i++) {
				totalpostprecount = totalpostprecount + getResult("%Area",i);
				if(getResult("%Area",i) >= areapercent) {
					postprecount++;
					postprecount = postprecount + getResult("%Area",i);
				}
				x++;
			}
			selectImage("green-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				//then the red ROI
				str = filelist[d]+"	"+i+1+"	"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i);
				postpreArray = Array.concat(postpreArray,str);
			}
			selectImage("red-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				str = "		"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i)+"\n";
				postpostArray = Array.concat(postpostArray,str);
			}
			selectImage("blue-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				str = "		"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i)+"\n";
				postpostArray = Array.concat(postpostArray,str);
			}
			xpost = x;
			totalpostprecount = (totalpostprecount/x);
			postprecount = postprecount/postprecount;
	
			roiManager("reset"); 
			run("Clear Results");
			
			if( threecount > 0 ) {
	 	 		roiManager("Open", resultdir+folderlist[f]+name+"_Blue_ROI.zip");
				}
			selectImage("green mask");
			run("Clear Results");
			roiManager("Measure");
			postprecount=0;
			x = 0;
			for(i=0;i<roiManager("Count");i++) {
				totalpostprecount = totalpostprecount + getResult("%Area",i);
				if(getResult("%Area",i) >= areapercent) {
					postprecount++;
					postprecount = postprecount + getResult("%Area",i);
				}
				x++;
			}
			selectImage("green-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				//then the red ROI
				str = filelist[d]+"	"+i+1+"	"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i);
				postpreArray = Array.concat(postpreArray,str);
			}
			selectImage("red-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				str = "		"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i)+"\n";
				postpostArray = Array.concat(postpostArray,str);
			}
			selectImage("blue-unmask");
			run("Clear Results");
			roiManager("Measure");
			for(i=0;i<roiManager("Count");i++) {
				str = "		"+getResult("Area",i)+"	"+getResult("%Area",i)+"	"+ getResult("Mean",i)+"	"+getResult("IntDen",i)+"	"+getResult("RawIntDen",i)+"\n";
				POIPOIArray = Array.concat(POIPOIArray,str);
			}
			xpost = x;
			totalpostprecount = (totalpostprecount/x);
			postprecount = postprecount/postprecount;
	
			roiManager("reset"); 
			run("Clear Results");
			//prints this + variable strings produced from the other functions to the log to be saved
			print(name+"	"+precount+"("+pre+")"+"	"+postcount+"("+post+")"+"	"+POIcount+"("+POI+")"+"	"+prepostcount+"	"+postprecount+"	"+"dendritelength"+"	"+(precount+"/dendritelength")+"	"+(postcount+"/dendritelength")+"	"+(postprecount+"/dendritelength")+"	"+(prepostcount+"/dendritelength")+"		"+prepostcount+"	"+totalprepostcount+"	"+xpre+"	"+postprecount+"	"+totalpostprecount+"	"+xpost);
		}
		run("Close All"); 

		//resultdir+folderlist[f] is the name of the condition
		temptitle = File.getName(resultdir+folderlist[f]);
	}
}

//This takes the arrays and puts them into the string - they were arrays
//because the method in which the ROI quant is collected only permits one measurement at a time
//and swapping back and forth between images and measuring the image individually between
//each single puncta seems less straightforward than just making it an array

UMcountprepostprepre = UMcountprepostprepre + pre+"ROI/"+post+"Img								"+ pre+"ROI/"+ pre+"Img\n";
for(k=0;k<prepostArray.length;k++)	{
	UMcountprepostprepre = UMcountprepostprepre + prepostArray[k] +postpre[k];
}
UMcountpostprepostpost = UMcountpostprepostpost +post+"ROI/"+pre+"Img								"+ post+"ROI/"+ post+"Img\n";
for(k=0;k<postpreArray.length;k++)	{
	UMcountpostprepostpost = UMcountpostprepostpost + postpreArray[k] +postpostArray[k];
}
UMcountprePOIpostPOIPOIPOI = UMcountprePOIpostPOIPOIPOI + pre+"ROI/"+POI+"Img								"+post+"ROI/"+POI+"Img								"+POI+"ROI/"+POI+"Img"+" \n";
for(k=0;k<postpreArray.length;k++)	{
	UMcountprePOIpostPOIPOIPOI = UMcountprePOIpostPOIPOIPOI + POIpreArray[k] +POIpostArray[k]+ POIPOIArray[k];
}


//these take the strings and the log and save them as tab separated excel sheets
selectWindow("Log");
saveAs("Text", resultdir+"Summary.xls");
selectWindow("Log"); 
run("Close");
selectWindow("Results"); 
run("Close");
selectWindow("ROI Manager"); 
run("Close");
File.saveString(UMcountprepostprepre,resultdir+"rawPrePostintensity.xls");
File.saveString(UMcountpostprepostpost,resultdir+"rawPostPreintensity.xls");
File.saveString(UUMcountprePOIpostPOIPOIPOI,resultdir+"rawPostPreintensity.xls");

//the following functions are listed in order of use in the macro

//thresholding parameters are generally the only ones that need changing, but all can be modified
function parameterinput()
	{
	colors = newArray("Green, Red, Blue");
	Dialog.create("Parameter");
		Dialog.addNumber("Green Threshold:", 30);
		Dialog.addNumber("Red Threshold:", 30);
		Dialog.addNumber("Blue Threshold", 30);
		Dialog.addNumber("Area Percent (%):", 25);
		Dialog.addNumber("Pixel Scale (um/pixel):", 0.1705);
		Dialog.addNumber("Min Puncta Size (pixel):", 1);
		Dialog.addNumber("Max Puncta Size (pixel):", 60);
		Dialog.addChoice("presynaptic\nchannel",colors[0]);
		Dialog.addChoice("postsynaptic\nchannel",colors[1]);
		Dialog.addChoice("associated protein\nof interest",colors[2]);
	Dialog.show();
	greenThreshold = Dialog.getNumber();
	redThreshold = Dialog.getNumber();
	blueThreshold = Dialog.getNumber();
	areapercent = Dialog.getNumber();  
	scale = Dialog.getNumber();  
	minsize = Dialog.getNumber();  
	maxsize = Dialog.getNumber(); 
	pre = Dialog.getChoice();
	post = Dialog.getChoice();
	POI = Dialog.getChoice();
	}
	
//this function opens the appropriate image from the appropriate folder in the raw data folder
//gets the name, standardizes the properties of the image, splits the channels and discards the blue channel 
//as "axon" to be saved elsewhere

function initialize()
 {
	open(rawdir+foldername+File.separator+rawlist[d]);
	name=getInfo("image.filename");
	run("Properties...", "channels=1 slices=1 frames=1 unit=um pixel_width="+scale+" pixel_height=0.1705 voxel_depth=1");
	run("Split Channels");

	selectImage(name+" (blue)"); 
	rename("blue");
	run("Duplicate...", " ");
	selectImage("blue-1"); 
	rename("blue-unmask");

	selectImage(name+" (green)"); 
	rename("green");
	run("Duplicate...", " ");
	selectImage("green-1"); 
	rename("green-unmask");

	selectImage(name+" (red)"); 
	rename("red");
	run("Duplicate...", " ");
	selectImage("red-1"); 
	rename("red-unmask");
 }

//this function creates a mask for the selected color channel (green or red). 
//it takes the threshold indicated in the parameter input, uses it to point out the maxima 
//and then runs "analyze particles" within the specified puncta size, saves the number of puncta as a string, saves the ROI, 
//and saves the mask

function mask(channel)
	{
	selectImage(channel);
	run("Gaussian Blur...", "sigma=1");
	if( channel == "Green") {
		setThreshold(greenThreshold, 255);
		}
	if( channel == "Red") {
		setThreshold(redThreshold, 255);
		}
	if( channel == "Blue") {
		setThreshold(blueThreshold, 255);
		}
	run("Find Maxima...", "noise=10 output=[Segmented Particles] above");
	run("Analyze Particles...", "size="+minsize+"-"+maxsize+" pixel show=Masks add");
	selectWindow("Mask of "+channel+" Segmented");  
	run("Grays");
	saveAs("Tiff", resultdir+folderlist[f]+name+"_"+channel+"_mask.tif");
	run("Clear Results");
	roiManager("Measure");
	selectWindow("Results");

	run("Clear Results");
	rename(channel+" mask");
	selectImage(channel); close();
	selectImage(channel+" Segmented"); close();

	if( channel == "Green" )  {
		precount = roiManager("Count");
		}
	if( channel == "Red" )  {
		postcount = roiManager("Count");
		}
	if( channel == "Blue" )  {
		POIcount = roiManager("Count");
		}
  
	if( roiManager("Count") > 0 )
		{
		roiManager("Save",resultdir+folderlist[f]+name+"_"+channel+"_ROI.zip");
		}
	roiManager("reset");
	}

//this function increases the contrast for the blue channel (marking dendrites even though it says axons)
//and measures the length of the segment (even though this is usually also done manually as a precaution)
